PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    UnknownPluginComponent trial_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      disabled = True
      syncScreenRefresh = False
      useWindowParams = False
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent choice
      letterHeight = 0.04
      startVal [time (s)] = 1.0
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      text [set every repeat]:
        $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
    KeyboardComponent response
      allowedKeys = 't', 'l'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      syncScreenRefresh = False
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  Routine insturctions
    UnknownPluginComponent insturctions_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      disabled = True
      syncScreenRefresh = False
      useWindowParams = False
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        In this experiment, you will be a given a choice like :

        "choose 30 dollars today or 50 dollars 10 days later".

        you have to press "T", if you choose to take the reward today or press "L" to choose to take the reward later.

        press "spacebar" to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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Flow
  Routine insturctions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = final_choices.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 1, 'future_reward': 165, 'delay': 122},
      {'reward_today': 86, 'future_reward': 91, 'delay': 44},
      {'reward_today': 59, 'future_reward': 91, 'delay': 120},
      {'reward_today': 98, 'future_reward': 99, 'delay': 59},
      {'reward_today': 82, 'future_reward': 91, 'delay': 72},
      {'reward_today': 92, 'future_reward': 135, 'delay': 133},
      {'reward_today': 74, 'future_reward': 111, 'delay': 129},
      {'reward_today': 79, 'future_reward': 84, 'delay': 131},
      {'reward_today': 81, 'future_reward': 141, 'delay': 112},
      {'reward_today': 93, 'future_reward': 156, 'delay': 70},
      {'reward_today': 96, 'future_reward': 146, 'delay': 108},
      {'reward_today': 85, 'future_reward': 94, 'delay': 89},
      {'reward_today': 57, 'future_reward': 121, 'delay': 60},
      {'reward_today': 73, 'future_reward': 91, 'delay': 62},
      {'reward_today': 58, 'future_reward': 129, 'delay': 135},
      {'reward_today': 32, 'future_reward': 76, 'delay': 87},
      {'reward_today': 20, 'future_reward': 82, 'delay': 42},
      {'reward_today': 78, 'future_reward': 113, 'delay': 105},
      {'reward_today': 42, 'future_reward': 106, 'delay': 96},
      {'reward_today': 97, 'future_reward': 105, 'delay': 66}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
    Routine trial
  LoopTerminator trials
